PsychoPy2experiment version="2022.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1020,768]
  expName = expectation_shapes_perceived_time
  keyboardBackend = ioHub
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Routines
  Routine fam
    CodeComponent sizeVariables
      Code Type = Auto->JS
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      Begin Experiment:
        fColor=1
        sizeHand=2.5
        diskSize=1
        sizeClockCentre=0.3# =fixation point
        sizePlaceholder=1
    CodeComponent secToFrame
      Code Type = Auto->JS
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      Begin Experiment:
        expInfo['frameRate'] = win.getActualFrameRate()
        fps=expInfo['frameRate']
        def s2nFrame(durInS):
            #durInS=0.33
            #fps= 59.9# lets say it is 60
            preciseFrameDur=1.0/fps # expInfo['frameRate']
            nFrame=round(durInS/preciseFrameDur)
            return(nFrame)
    CodeComponent handRoate
      Code Type = Auto->JS
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      Begin Experiment:
        import math
        fps=expInfo['frameRate'] #gives frame-per-second fps
        fpsR=round(fps)
        durFam=2.0#in s
        numFramePer2Sec=round(fps*2)
        frameReq=numFramePer2Sec
        #frameReq=durFam/frameDur
        oriPerFrame=360/frameReq

        #oriPerFrame=(360/fps)/2
        toneStart=round(fps/4)
        clockRotStart=toneStart+2
      Begin Routine:
        oriHand=-90
        frameHand=999
        counterForStart=0
        fColor=1
        #oriPerFrame=360/frameReq
        #oriPerFrame=360/(2*fps)
      Each Frame:
        if counterForStart==clockRotStart:
            if clockHand.status == STARTED:
            #if frameHand<(1000+fps) and frameHand>999:
            #    frameHand+=1
            #if frameHand==1000:
                thisExp.addData('handMove.started', tThisFlipGlobal)
                frameHand=0


        if frameHand<round(2*fps):
            oriHand+=oriPerFrame
            #fColor=fColor-0.0085
            #clockHand.setOri(oriHand, log=False)
            frameHand+=1
        elif frameHand==round(2*fps):
             thisExp.addData('handOri',oriHand)
             thisExp.addData('handMove.ended', tThisFlipGlobal)
             frameHand=999
            #oriHand=-90
            #clockHand.setOri(45, log=False)

        #elif frameHand==round(2*fps):
            #clockHand.setOri(270, log=False)
        #    frameHand=1999

        counterForStart=counterForStart+1
    PolygonComponent clockOutDisk
      lineWidth = 4
      saveStartStop = False
      shape = circle
      size = (sizeHand*2, sizeHand*2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = round(clockRotStart+fpsR*2.5)
      units = deg
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    PolygonComponent clockHand
      anchor = bottom-center
      fillColor = white
      interpolate = nearest
      lineWidth = 4
      ori [set every frame] = oriHand
      saveStartStop = False
      shape = custom polygon...
      size = (sizeHand, 0.0001)
      startVal [frame N] = 0
      stopVal [duration (frames)] = round(clockRotStart+fpsR*2.5)
      units = deg
      vertices = [[0,0],[1,1]]
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    SoundComponent audioCue2Start
      hamming = False
      startVal [time (s)] = 0.500
      stopVal [duration (s)] = 0.033
      syncScreenRefresh = False
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    SoundComponent audioCue2End
      durationEstim = 0.033
      hamming = False
      sound = audioCue2Init.wav
      startVal [frame N] = clockRotStart+round(2*fps)
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    PolygonComponent centreClock
      fillColor [set every frame] = [fColor,fColor,fColor]
      interpolate = nearest
      lineWidth = 1.5
      saveStartStop = False
      shape = circle
      size = (sizeClockCentre,sizeClockCentre)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = round(clockRotStart+fpsR*2.5)
      units = deg
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  Routine key2pass
    TextComponent continueFam
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'Space' to continue familiarizing with timig-interval
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    KeyboardComponent sapce2pass
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent clockOutDisk_2
      lineWidth = 4
      saveStartStop = False
      shape = circle
      size = (sizeHand*2, sizeHand*2)
      startVal [frame N] = 0
      units = deg
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    PolygonComponent clockHand_2
      anchor = bottom-center
      fillColor = white
      interpolate = nearest
      lineWidth = 4
      ori [set every frame] = -90
      saveStartStop = False
      shape = custom polygon...
      size = (sizeHand, 0.0001)
      startVal [frame N] = 0
      units = deg
      vertices = [[0,0],[1,1]]
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    PolygonComponent centreClock_2
      fillColor = white
      interpolate = nearest
      lineWidth = 1.5
      saveStartStop = False
      shape = circle
      size = (sizeClockCentre,sizeClockCentre)
      startVal [time (s)] = 0.0
      units = deg
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  Routine welcomeScr
    TextComponent welcomeTxt
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiemnt,
        Press 'Space' to start familiarizing with trial time intervals.
    KeyboardComponent skipWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent pickTargetCol
      Code Type = Auto->JS
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      Begin Experiment:
        stimColors=['red','blue']
      Begin Routine:
        shuffle(stimColors)
        targetColor=stimColors[0]
        distractorColor=stimColors[1]
    CodeComponent timingVars
      Code Type = Auto->JS
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      Begin Experiment:
        diskRadius=1
        durS1=s2nFrame(0.033)
        durS2=s2nFrame(0.033)
      Begin Routine:
        durS1=s2nFrame(0.033)
        durS2=s2nFrame(0.033)
        ### Timing of objects
        preTrialInterval=s2nFrame(0.5)
        initInterval=s2nFrame(randint(150,1550)/1000)+preTrialInterval
        midInterval =[-0.300 , -0.233, -0.167, -0.100 , -0.033, 0.033, 0.100 ,0.167, 0.233, 0.300]
        shuffle(midInterval)
        midInterval=s2nFrame(midInterval[0])
        onsetS1=initInterval
        onsetS2=onsetS1+durS1+midInterval
        lastInterval=s2nFrame(2.0)-(onsetS2+33)
        cueForRepOnset=s2nFrame(2.0)
        #response
    SoundComponent audCueStart
      hamming = False
      sound = A
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.033
      syncScreenRefresh = False
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    PolygonComponent outerDisk
      interpolate = nearest
      lineWidth = 3.5
      saveStartStop = False
      shape = circle
      size = (sizeHand*2, sizeHand*2)
      startVal [time (s)] = 0
      units = deg
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    PolygonComponent distractor
      fillColor [set every repeat] = $distractorColor
      interpolate = nearest
      lineColor [set every repeat] = $distractorColor
      shape = circle
      size = (diskRadius,diskRadius)
      startVal [frame N] = onsetS2
      stopVal [duration (frames)] = durS2
      units = deg
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    PolygonComponent target
      fillColor [set every repeat] = $targetColor
      interpolate = nearest
      lineColor [set every repeat] = $targetColor
      shape = circle
      size = (diskSize,diskSize)
      startVal [frame N] = onsetS1
      stopVal [duration (frames)] = durS1
      units = deg
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    PolygonComponent placeholder
      interpolate = nearest
      lineColor = [fColor,fColor,fColor]
      lineWidth = 1.5
      saveStartStop = False
      shape = circle
      size = (diskSize,diskSize)
      startVal [time (s)] = 0.0
      units = deg
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    SoundComponent audCueEnd
      hamming = False
      sound = audioCue2Init.wav
      startVal [frame N] = 120+preTrialInterval
      stopVal [duration (s)] = 0.033
      syncScreenRefresh = False
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    KeyboardComponent sapce2pass_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      syncScreenRefresh = False
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    PolygonComponent fixationPoint
      fillColor = white
      opacity [set every frame] = fixation_opacity
      ori = 45
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = preTrialInterval
      units = deg
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    CodeComponent fixOpacitiy
      Code Type = Auto->JS
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      Begin Experiment:
        fixation_opacity=1
      Begin Routine:
        fixation_opacity=1
        i=0
      Each Frame:
        opacityDecrement=(1/preTrialInterval)
        if i>(round(preTrialInterval/2)):
            fixation_opacity=fixation_opacity-opacityDecrement
        i+=1
  Routine trial_cycle
    KeyboardComponent space2pass
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = test
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    CodeComponent pickTargetCol_2
      Code Type = Auto->JS
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      Begin Experiment:
        stimColors=['red','blue']
      Begin Routine:
        shuffle(stimColors)
        targetColor=stimColors[0]
        distractorColor=stimColors[1]
    CodeComponent timingVars_2
      Code Type = Auto->JS
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      Begin Experiment:
        diskRadius=1
        durS1=s2nFrame(0.033)
        durS2=s2nFrame(0.033)
      Begin Routine:
        ### Timing of objects
        initInterval=randint(150,1550)/1000
        midInterval =[-0.300 , -0.233, -0.167, -0.100 , -0.033,
        0.033, 0.100 ,0.167, 0.233, 0.300]
        shuffle(midInterval)
        midInterval=s2nFrame(midInterval[0])
        onsetS1=s2nFrame(initInterval)
        onsetS2=onsetS1+durS1+midInterval
        lastInterval=s2nFrame(2.0)-(onsetS2+33)
        cueForRepOnset=s2nFrame(2.0)
        #response
  Routine response
    CodeComponent pickTargetCol_3
      Code Type = Auto->JS
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      Begin Experiment:
        stimColors=['red','blue']
      Begin Routine:
        shuffle(stimColors)
        targetColor=stimColors[0]
        distractorColor=stimColors[1]
    CodeComponent timingVars_3
      Code Type = Auto->JS
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      Begin Experiment:
        diskRadius=1
        durS1=s2nFrame(0.033)
        durS2=s2nFrame(0.033)
      Begin Routine:
        durS1=s2nFrame(0.033)
        durS2=s2nFrame(0.033)
        ### Timing of objects
        initInterval=randint(150,1550)/1000
        initInterval=s2nFrame(initInterval)
        midInterval =[-0.300 , -0.233, -0.167, -0.100 , -0.033, 0.033, 0.100 ,0.167, 0.233, 0.300]
        shuffle(midInterval)
        midInterval=s2nFrame(midInterval[0])
        onsetS1=initInterval
        onsetS2=onsetS1+durS1+midInterval
        lastInterval=s2nFrame(2.0)-(onsetS2+33)
        cueForRepOnset=s2nFrame(2.0)
        #response
    SoundComponent audCueStart_2
      hamming = False
      saveStartStop = False
      sound = audioCue2Init.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.033
      syncScreenRefresh = False
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    PolygonComponent outerDisk_2
      interpolate = nearest
      lineWidth = 3.5
      saveStartStop = False
      shape = circle
      size = (sizeHand*2, sizeHand*2)
      startVal [time (s)] = 0
      units = deg
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    PolygonComponent distractor_2
      fillColor [set every repeat] = $distractorColor
      interpolate = nearest
      lineColor [set every repeat] = $distractorColor
      saveStartStop = False
      shape = circle
      size = (diskRadius,diskRadius)
      startVal [frame N] = onsetS2
      stopVal [duration (frames)] = durS2
      units = deg
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    PolygonComponent target_2
      fillColor [set every repeat] = $targetColor
      interpolate = nearest
      lineColor [set every repeat] = $targetColor
      shape = circle
      size = (diskSize,diskSize)
      startVal [frame N] = onsetS1
      stopVal [duration (frames)] = durS1
      units = deg
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    PolygonComponent placeholder_2
      interpolate = nearest
      lineColor = [fColor,fColor,fColor]
      lineWidth = 1.5
      saveStartStop = False
      shape = circle
      size = (diskSize,diskSize)
      startVal [time (s)] = 0.0
      units = deg
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    SoundComponent audCueEnd_2
      disabled = True
      hamming = False
      saveStartStop = False
      sound = audioCue2Init.wav
      startVal [frame N] = cueForRepOnset
      stopVal [duration (s)] = 0.033
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    KeyboardComponent sapce2pass_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine welcomeScr
  LoopInitiator famLoop loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine fam
    Routine key2pass
  LoopTerminator famLoop
  LoopInitiator trialss loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trial
  LoopTerminator trialss
