PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [800,800]
  expName = test
  keyboardBackend = ioHub
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Routines
  Routine trial
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable = name,position
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        x_coord = 0
        y_coord = 0
      Each Frame:
        if mouse.getPressed()[0]==1:
            x_coord=mouse.getPos()[0]
            y_coord=mouse.getPos()[1]
      End Routine:
        thisExp.addData('x_coord', x_coord)
        thisExp.addData('y_coord', y_coord)
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = white
      pos [set every frame] = (x_coord, y_coord)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
